PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['date'], expInfo['participant'], expName)
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['img/B01_00.jpg', 'img/B01_01.jpg', 'img/B01_02.jpg', 'img/B01_03.jpg', 'img/B01_04.jpg', 'img/B01_05.jpg', 'img/B01_06.jpg', 'img/B01_07.jpg', 'img/B01_08.jpg', 'img/B01_09.jpg', 'img/B01_10.jpg', 'img/B02_00.jpg', 'img/B02_01.jpg', 'img/B02_02.jpg', 'img/B02_03.jpg', 'img/B02_04.jpg', 'img/B02_05.jpg', 'img/B02_06.jpg', 'img/B02_07.jpg', 'img/B02_08.jpg', 'img/B02_09.jpg', 'img/B02_10.jpg', 'img/B03_00.jpg', 'img/B03_01.jpg', 'img/B03_02.jpg', 'img/B03_03.jpg', 'img/B03_04.jpg', 'img/B03_05.jpg', 'img/B03_06.jpg', 'img/B03_07.jpg', 'img/B03_08.jpg', 'img/B03_09.jpg', 'img/B03_10.jpg', 'img/B04_00.jpg', 'img/B04_01.jpg', 'img/B04_02.jpg', 'img/B04_03.jpg', 'img/B04_04.jpg', 'img/B04_05.jpg', 'img/B04_06.jpg', 'img/B04_07.jpg', 'img/B04_08.jpg', 'img/B04_09.jpg', 'img/B04_10.jpg', 'img/B05_00.jpg', 'img/B05_01.jpg', 'img/B05_02.jpg', 'img/B05_03.jpg', 'img/B05_04.jpg', 'img/B05_05.jpg', 'img/B05_06.jpg', 'img/B05_07.jpg', 'img/B05_08.jpg', 'img/B05_09.jpg', 'img/B05_10.jpg', 'img/B06_00.jpg', 'img/B06_01.jpg', 'img/B06_02.jpg', 'img/B06_03.jpg', 'img/B06_04.jpg', 'img/B06_05.jpg', 'img/B06_06.jpg', 'img/B06_07.jpg', 'img/B06_08.jpg', 'img/B06_09.jpg', 'img/B06_10.jpg', 'img/B07_00.jpg', 'img/B07_01.jpg', 'img/B07_02.jpg', 'img/B07_03.jpg', 'img/B07_04.jpg', 'img/B07_05.jpg', 'img/B07_06.jpg', 'img/B07_07.jpg', 'img/B07_08.jpg', 'img/B07_09.jpg', 'img/B07_10.jpg', 'img/B08_00.jpg', 'img/B08_01.jpg', 'img/B08_02.jpg', 'img/B08_03.jpg', 'img/B08_04.jpg', 'img/B08_05.jpg', 'img/B08_06.jpg', 'img/B08_07.jpg', 'img/B08_08.jpg', 'img/B08_09.jpg', 'img/B08_10.jpg', 'img/B09_00.jpg', 'img/B09_01.jpg', 'img/B09_02.jpg', 'img/B09_03.jpg', 'img/B09_04.jpg', 'img/B09_05.jpg', 'img/B09_06.jpg', 'img/B09_07.jpg', 'img/B09_08.jpg', 'img/B09_09.jpg', 'img/B09_10.jpg', 'img/B10_00.jpg', 'img/B10_01.jpg', 'img/B10_02.jpg', 'img/B10_03.jpg', 'img/B10_04.jpg', 'img/B10_05.jpg', 'img/B10_06.jpg', 'img/B10_07.jpg', 'img/B10_08.jpg', 'img/B10_09.jpg', 'img/B10_10.jpg']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = fluency
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine fixation
    CodeComponent randDuration
      Code Type = Both
      Before JS Experiment:
        function randomIntFromInterval(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }
      Begin JS Routine:
        //this function is defined in the "before experiment"
        //tab
        fixation_duration = randomIntFromInterval(1.4, 1.6);
      Begin Routine:
        fixation_duration = np.random.normal(1.5, 1)
    TextComponent fixCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text = +
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    CodeComponent clearBuffer
      Code Type = Auto->JS
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      End Routine:
        event.clearEvents()
        keys = event.getKeys(clear=True)
  Routine redo_feedback
    TextComponent out_of_time_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 1.3
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      text:
        Oops, out of time! Remember to respond within 3 seconds of seeing the face - you will need to re-try this trial.




        Press SPACE to try again.
    TextComponent timeoutReminder
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr
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    KeyboardComponent redo_keypress
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent timeoutResume
      Code Type = Auto->JS
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      End Routine:
        event.getKeys()
  Routine specific_instr
    TextComponent genInstr2
      letterHeight = 0.045
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = At the start of each trial, you will be looking at the middle of the screen (marked by a +). After a short time, a face will appear and you will respond within 3 seconds. The length of time before the face appears is random, so stay alert! To respond:
      wrapWidth = 1.3
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    TextComponent specific_instructions
      letterHeight = 0.043
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr
      wrapWidth = 1.5
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    TextComponent definition
      letterHeight = 0.0425
      pos = (0,-0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $term
      wrapWidth = 1.5
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    TextComponent IntroCont5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    KeyboardComponent spec_instr_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine general_instr
    TextComponent genInstr
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        At the start of each trial, you will be looking at the middle of the screen (marked by a +). After a short time, a face will appear. The length of time before the face appears is random, so stay alert!

        After that, you will rate how attractive you found the face you just saw. By 'attractive', we mean how pleasant the face was to see.
    KeyboardComponent instr_advance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cont
    TextComponent trialPassed
      letterHeight = 0.045
      pos = (0, 0.175)
      startVal [time (s)] = 0.0
      text = Trial complete! Remember:
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    TextComponent fixCross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    TextComponent reminder
      letterHeight = 0.045
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr
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    KeyboardComponent contResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent contPrompt
      letterHeight = 0.045
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = Now, look at the middle of the screen and press the SPACE BAR to move onto the next trial.
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  Routine intro2Questions
    TextComponent qsIntro
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Good work! You have finished the first phase of the study. Now you need to answer a set of questions for us; please do your best to do so honestly. You will be using your mouse for this section.

        Press the SPACE BAR to continue when you are ready.
    KeyboardComponent contResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hello
    TextComponent welcome
      letterHeight = 0.045
      pos = (0, 0.175)
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Welcome to the study! Please make sure you are in a quiet environment where you will be able to concentrate on the task.

        Before we begin, you must enter your Prolific ID below and review the consent form on the next three screens.

        Type your ID below:
    TextboxComponent idTextbox
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0, -.1)
      size = (0.45, 0.06)
      startVal [time (s)] = 0
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    ButtonComponent welcomeDone
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (1,.25)
      startVal [time (s)] = 1
      text = CLICK HERE TO CONTINUE AFTER TYPING YOUR ID
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  Routine bye
  Routine test
    CodeComponent leftText_3
      Code Type = Auto->JS
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      Begin Routine:
        text.alignHoriz = 'left'
    TextComponent text
      letterHeight = 0.021
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 1.5
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      text:
        1. An expert who doesn't come up with a definite answer probably doesn't know too much



        2. There is really no such thing as a problem that can't be solved.



        3. A good job is one where what is to be done and how it is to be done are always clear.



        4. In the long run it is possible to get more done by tackling small, simple problems rather than large and complicated ones



        5. What we are used to is always preferable to what is unfamiliar



        6. A person who leads an even, regular life in which few surprises or unexpected happenings really has a lot to be grateful for



        7. I like parties where I know most of the people more than ones where all or most of the people are complete strangers



        8. The sooner we all acquire similar values and ideals the better.
  Routine attention_check
  Routine attnCheck1
    TextComponent attnQuestion1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Use your keyboard to answer the following question:

        What will appear at the start of each trial?

        a) a house

        b) a bird

        c) a face
    KeyboardComponent attnKeyResp1
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent questionsLeft1
      Code Type = Auto->JS
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      Begin Routine:
        attnQuestion1.alignText='left'
        attnQuestion1.alignHoriz = 'left'
    CodeComponent attnCheck1_2
      Code Type = Auto->JS
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      End Routine:
        keys = event.getKeys()
        if 'a' in keys or 'b' in keys:
            failure = True
            continueQuestions=0
        else:
            failure = False
            continueQuestions=1
  Routine openAnswer
    TextComponent openPrompt
      letterHeight = 0.03
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = When you were responding to the faces, did you find yourself using any kind of strategy to improve your performance on the task? If so, what was it? Please type any thoughts you have about this experiment below:
      wrapWidth = 1.5
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    TextboxComponent textbox
      bold = False
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      lineSpacing = .5
      pos = (0, -.05)
      size = (1.25, .25)
      startVal [time (s)] = 0.0
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    ButtonComponent openAnswerClick
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (.5,.25)
      startVal [time (s)] = 3
      text = CLICK HERE TO CONTINUE
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  Routine general_instr2
    TextComponent genInstr_2
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        This experiment has two phases. Your inputs in both phases of the experiment are fully confidential.

        In the first phase, you will complete a series of trials in which a face appears onscreen and you use your keyboard to respond to it. After that, you will rate the face on a scale.

        In the second phase, you will complete a short questionnare.
    KeyboardComponent instr_advance_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent IntroCont7
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 2
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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  Routine specific_instr2
    TextComponent specific_instructions_2
      letterHeight = 0.0425
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr + ". Be sure to respond within 3 seconds; a green frame around the image will show that your response was registered."
      wrapWidth = 1.3
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    TextComponent definition_2
      letterHeight = 0.0425
      pos = (0,-.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $term
      wrapWidth = 1.3
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    KeyboardComponent spec_instr_adv_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent IntroCont8
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 2
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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  Routine attnFailed
    TextComponent attnFailure_continue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You answered one of the questions about this task incorrectly and will need to review the instructions. 
      wrapWidth = 1.3
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    KeyboardComponent failureAcknowledged
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent reviewStart
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 1
      text = Press SPACE to repeat instructions.
      wrapWidth = 1.5
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  Routine consent2
    TextComponent consentText_2
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        We are not interested in how you perform individually, but whether people in general are able to visually identify or discriminate the images presented more effectively in some conditions than in others. The pattern of results will allow us to determine the processes that people use to identify and discriminate between objects, faces and scenes, and how they respond to them afterwards.

        RISKS: There are no expected risks to this study beyond the potential that you may become tired and/or bored with the task. To reduce the possibility that this will occur, the task will be self-paced (you may take breaks when needed). Loss of confidentiality is a risk (i.e., someone may inadvertently gain access to our records).

        At the conclusion of this study, we may publish the results of this study in a scientific journal. Information will be presented in summary format and you will not be identified in any publications or presentations (in fact, we will no longer be able to determine which data files is yours). The data files containing your keyboard responses will be kept for a minimum of 6 years beyond publication of this study. After publication, we may share your data files with other researchers who may wish to re-analyze the results. However, there will no longer be any record of your identity at that time. This disclosure of the data is purely for scientific purposes.

        BENEFITS: You may not directly benefit from this research; however, we hope that your participation will provide some educational benefit by experiencing the nature of behavioral research on visual perception and categorization. For this reason, we encourage you to speak with the researcher after conclusion of your participation so that you can learn more about the design and hypotheses of this study. In addition, these results may benefit society in a number of ways, such as by increasing our understanding of how the process of categorization affects the perception of objects.
    TextComponent introCont3
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 2
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    KeyboardComponent consent_advance_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine consent1
    TextComponent consentText_1
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This form will give you information about the study so you can decide about participating in the research. This study is an investigation of visual perception and categorization. The session will last between 20 and 60 minutes in total. You will receive compensation at a rate of 8 dollars per hour for your time. If you are interested in learning more about this study, we will inform you of our hypotheses immediately after you complete the study. We will not contact you again after you complete the study, although you are free to contact us at any time if you have any additional questions or concerns, or if you would like to learn the outcome of this study.

        You can reach the principal investigator, Jeffrey Starns at jstarns@umass.edu or the Psychological and Brain Sciences Department Chair via Laura Wildman Hanlon at (413) 545-2387 or laurawh@umass.edu. If you have any questions concerning your rights as a research subject, you may contact the University of Massachusetts Amherst Human Research Protection Office (HRPO) at (413) 545-3428 or humansubjects@ora.umass.edu.

        PURPOSE: In this study, you will view a sequence of images (abstract shapes, objects, faces, or scenes) about which you will be asked to answer questions. The questions will relate either to perception (e.g., "Is this item part of group A or B?), or to your feelings about the item (e.g., "How attractive is the item?"). Your responses will be made by using your computer keyboard. The material will be either abstract shapes with no particular meaning, or everyday objects, faces, or scenes that are not offensive or provocative. You may also be asked to fill out short questionnaires after the main task. The questionnaires will consist of series of statements to which you will rate your agreement to on a numbered scale. The statements will not be offensive in nature.
    TextComponent introCont2
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 4
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    KeyboardComponent consent_advance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine consent3
    TextComponent consentText_3
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        PARTICIPATION: Your participation in the experiment is voluntary and you can withdraw at any time without penalty. You will still get payment for the time you have spent participating. You do not have to be in this study if you do not want to. If you agree to be in the study, but later change your mind, you may drop out at any time by pressing the Escape key twice. There are no penalties or consequences of any kind if you decide that you do not want to participate. If you decide to withdraw during today's session, you will still receive 2 dollars per 15 minutes of participation, rounded up to the nearest 15 minutes.

        SUBJECT STATEMENT OF CONSENT: By clicking “I agree” I am indicating that I am eligible for this study and am agreeing to voluntarily enter this study. I have had a chance to read this consent form, and it was explained to me in a language which I use and understand. I understand that I can withdraw at any time.
    TextComponent iAgree
      letterHeight = 0.04
      pos = (0.3, -0.35)
      startVal [time (s)] = 0.0
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      text:
        I agree
        (click to continue experiment)
    TextComponent iQuit
      letterHeight = 0.04
      pos = (-0.3, -0.35)
      startVal [time (s)] = 0.0
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      text:
        I do not agree
        (click for exit code)
    CodeComponent didTheyReject
      Code Type = Auto->JS
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      Begin Experiment:
        nonconsent=0
      Each Frame:
        if consentClick.isPressedIn(iQuit):
            nonconsent=1
    MouseComponent consentClick
      clickable = iAgree, iQuit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instrStart
    TextComponent genInstr1
      letterHeight = 0.045
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        We will now explain the task. You will need to accurately answer questions about the task, so be sure to pay attention! This experiment has two phases. Your input in both phases of the experiment are fully confidential.

        In the first phase, you will complete a series of trials in which a face appears on-screen and you use your keyboard to respond to it. After that, you will rate the face on a scale.

        In the second phase, you will complete a short questionnaire.
    TextComponent IntroCont4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    KeyboardComponent instr_advance_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    CodeComponent condSelect
      Code Type = Auto->JS
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      Begin Experiment:
        #Use if-else flow to choose rows from the main
        #file. These rows should be python "lists".

        #I find the easiest way to use the participant number
        #for this purpose.
        #use the modulo operator (%) to cycle through

        # selects 110 trials of given condition based on number of participants
        #number of conds was 8: 4 tasks * 2 response key variants for counterbalancing
        selected_rows = range((expInfo['participant']%8)*110,(expInfo['participant']%8+1)*110)

        #short trial 'run' for testing
        #selected_rows=[1,2,3]

        #just mf
        #selected_rows=range(112, 222)
  Routine rateInstr
    TextComponent ratingInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Once the face is gone, you will rate it on a numeric scale going from 1 (not attractive) to 9 (very attractive), also using your keyboard.

        By "attractive", we simply mean how pleasant the face was to see.
    KeyboardComponent spec_instr_adv2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent IntroCont6
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 2
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    CodeComponent isInstrDone
      Code Type = Auto->JS
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      End Routine:
        instrLoop.finished = True
        event.getKeys()
        failure = 0
  Routine attnCheck
  Routine attnCheck2
    TextComponent attnQuestion2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Use your keyboard to answer the following question:

        Which keys will you use to respond to the face?

        a) J or K

        b) F or C

        c) A or D
    KeyboardComponent attnKeyResp2
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent questionsLeft2
      Code Type = Auto->JS
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      Begin Routine:
        attnQuestion2.alignText='left'
        attnQuestion2.alignHoriz = 'left'
    CodeComponent attnCheck2_2
      Code Type = Auto->JS
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      End Routine:
        keys = event.getKeys()
        if 'b' in keys or 'c' in keys:
            failure = 1
            continueQuestions=0
        else:
            failure = 0
            continueQuestions=1
  Routine attnCheck3
    TextComponent attnQuestion3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Use your keyboard to answer the following question:

        What will you rate afterwards?

        a) the face, based on familiarity

        b) this experiment, based on excitement

        c) the face, based on attractiveness
    KeyboardComponent attnKeyResp3
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent questionsLeft3
      Code Type = Auto->JS
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      Begin Routine:
        attnQuestion3.alignText='left'
        attnQuestion3.alignHoriz = 'left'
    CodeComponent attnCheck3_2
      Code Type = Auto->JS
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      End Routine:
        keys = event.getKeys()
        if 'a' in keys or 'b' in keys:
            failure = 1
        else:
            failure = 0
            attnLoop.finished = True
  Routine rateInstr2
    TextComponent ratingInstr_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.35
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      text:
        Once the face is gone, you will rate it on a numeric scale going from 1 (not attractive) to 9 (very attractive), also using your keyboard.

        By "attractive", we simply mean how pleasant the face was to see.
    KeyboardComponent rate_instr_adv2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent IntroCont9
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 2
      text = Press the SPACE BAR to continue when you are ready.
      wrapWidth = 1.5
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    CodeComponent isInstrDone_2
      Code Type = Auto->JS
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      End Routine:
        reshowInstr.finished = True
        event.getKeys()
        failure = 0
  Routine debrief
    TextComponent debriefText
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        What this experiment was for:

        We are investigating how having to categorize a face will affect its percieved attractiveness. Existing research indicates that the harder it is to process a face, the lower the attractiveness ratings given to it.

        If you had to label the face whenever it appeared using J or K, you were in one of our experimental groups; if you simply had to press one of those keys whenever the face appeared, you were in the control group.

        We are also interested in whether a person's tolerance of ambiguous situations affects how they feel about the faces they had a harder time categorizing. This is why we gave you that questionnaire at the end.

        Press SPACE to continue
    KeyboardComponent debriefEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine demographics
    TextComponent demographicsInstr
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Please select the options that describe you most accurately.
      wrapWidth = 1.5
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    TextComponent age
      letterHeight = 0.035
      pos = (-0.4, 0.225)
      startVal [time (s)] = 0.0
      text = What age group are you in?
      wrapWidth = 1.5
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    SliderComponent respAge
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Prefer not to say", "18-21", "21-30", "31-40", "41-50", "51-60", "Above 60")
      letterHeight = 0.025
      pos = (0, 0.15)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent gender
      letterHeight = 0.035
      pos = (-0.369, 0.025)
      startVal [time (s)] = 0.0
      text = What gender do you identify as?
      wrapWidth = 1.5
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    SliderComponent genderResp1
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Prefer not to say", "Something else (type in textbox)", "Non-binary", "Man", "Woman")
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.11, -0.135)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    ButtonComponent demogexitClick
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (.5,.25)
      startVal [condition] = respAge.rating and genderResp1.rating
      text = CLICK HERE TO CONTINUE
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    CodeComponent demogLeft
      Code Type = Auto->JS
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      Begin Routine:
        age.alignText='left'
        age.alignHoriz = 'left'

        gender.alignText='left'
        gender.alignHoriz = 'left'
  Routine introDone
    TextComponent attnSuccess_continue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This concludes the introduction! You may now begin the real task.

        Press the SPACE BAR to start the first trial. Be ready to respond to the face!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attnSuccess
    TextComponent introducePractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now do a practice trial.
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    KeyboardComponent practiceStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent practiceStart_button
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 1
      text = Press SPACE to begin.
      wrapWidth = 1.5
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  Routine practiceFace
    PolygonComponent respIndicator_2
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.41,0.61)
      startVal [condition] = practiceResp.keys
      stopVal [condition] = practiceImage.status==FINISHED
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    KeyboardComponent practiceResp
      allowedKeys = 'j', 'k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent practiceImage
      image = img/practice_image.jpg
      size = (0.4,0.6)
      startVal [time (s)] = 0.0
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    CodeComponent respCheck_2
      Code Type = Auto->JS
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      Begin Experiment:
        timesRedone = 0
      Begin Routine:
        redo = 0
      End Routine:
        keys = event.getKeys(['j','k'], clear=True)
        if len(keys) > 0:
            if 'k' in keys or 'j' in keys:
                practiceRepeat.finished = True
                redo = 0
            else:
                redo = 1
                timesRedone = timesRedone +1
        else:
            redo = 1
            timesRedone = timesRedone + 1

        thisExp.addData('timesRedone', timesRedone)
    CodeComponent endTrial_2
      Code Type = Auto->JS
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      Each Frame:
        if t > 3:
            continueRoutine = False
  Routine faceOnset
    PolygonComponent respIndicator
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.41,0.61)
      startVal [condition] = catResp.keys
      stopVal [condition] = face_image.status==FINISHED
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    ImageComponent face_image
      image [set every repeat] = $face_file
      size = (0.4,0.6)
      startVal [time (s)] = 0.0
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    CodeComponent absoluteTime
      Code Type = Auto->JS
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      Begin Experiment:
        #import time
        #library allows me to record time since exp started
        #aka absolute time
        #thisExp.addData('startTime', time.time())
      Begin Routine:
        #thisExp.addData('faceOnsetTime', time.time())
        #absoulute time that routine started
        #functionally when face img for given trial shown
        #will allow to cross-ref with log file if needed

        thisExp.addData("faceOnsetTime", globalClock.getTime())
        thisExp.nextEntry()
    KeyboardComponent catResp
      allowedKeys = 'j','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
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    CodeComponent respCheck
      Code Type = Auto->JS
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      Begin Experiment:
        timesRedone = 0
      Begin Routine:
        redo = 0
        keys=[]
      End Routine:
        keys = event.getKeys(['j','k'], clear=True)

        if len(keys) > 0:
            if 'k' in keys or 'j' in keys:
                repeat_loop.finished = True
                redo = 0
            else:
                redo = 1
                timesRedone = timesRedone + 1
        else:
            redo = 1
            timesRedone = timesRedone + 1

        thisExp.addData('globalTimesRedone', timesRedone)
    KeyboardComponent catAllKeys
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
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    CodeComponent endTrial
      Code Type = Auto->JS
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      Each Frame:
        if t > 3:
            continueRoutine = False
  Routine ratingScale
    SliderComponent attractiveness_slider
      forceEndRoutine = False
      granularity = 1
      labels = "1","2","3","4","5","6","7","8","9"
      letterHeight = 0.04
      pos = (0, -0.1)
      readOnly = True
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent attractiveness_instr
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Use your keyboard's number keys to rate the attractiveness of the face you just saw on this scale from 1 (not attractive) to 9 (very attractive).
      wrapWidth = 1.5
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    TextComponent notAttractive
      letterHeight = 0.031
      pos = (-0.61, -0.1)
      startVal [time (s)] = 0.0
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      text:
        NOT
        ATTRACTIVE
    TextComponent veryAttractive
      letterHeight = 0.031
      pos = (0.61, -0.1)
      startVal [time (s)] = 0.0
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      text:
        VERY
        ATTRACTIVE
    KeyboardComponent attrRating
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine closure1
    TextComponent qsInstr
      letterHeight = 0.03
      pos = (0, .32)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 5 (Strongly Agree). If you would prefer not to rate a given statement, select the "prefer not to answer" option on the far left end of the scale.
      wrapWidth = 1.5
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    TextComponent questions1
      letterHeight = 0.03
      pos = (0, 0.021)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        1. I don’t like situations that are uncertain.



        2. I dislike questions which could be answered in many different ways.



        3. I find that a well ordered life with regular hours suits my temperament.



        4. I feel uncomfortable when I don’t understand the reason why an event occurred in my life.
    SliderComponent respQ1
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.175)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ2
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.04)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ3
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -.09)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ4
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -0.22)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent surveyContinue1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (.5,.25)
      startVal [condition] = (respQ1.rating + respQ2.rating + respQ3.rating + respQ4.rating) > 0
      text = CLICK HERE TO CONTINUE
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    CodeComponent leftText1
      Code Type = Auto->JS
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      Begin Routine:
        questions1.alignText='left'
        questions1.alignHoriz = 'left'
  Routine closure2
    TextComponent qsInstr_2
      letterHeight = 0.03
      pos = (0, .32)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 5 (Strongly Agree). If you would prefer not to rate a given statement, select the "prefer not to answer" option on the far left end of the scale.
      wrapWidth = 1.5
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    TextComponent questions2
      letterHeight = 0.03
      pos = (0, 0.015)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        5. I feel irritated when one person disagrees with what everyone else in a group believes.



        6. I don’t like to go into a situation without knowing what I can expect from it.



        7. When I have made a decision, I feel relieved.



        8. When I am confronted with a problem, I’m dying to reach a solution very quickly.
    SliderComponent respQ5
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.1725)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ6
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.04)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ7
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -.095)
      size = (1, 0.014)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ8
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -0.225)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent surveyContinue2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (.5,.25)
      startVal [condition] = (respQ5.rating + respQ6.rating + respQ7.rating + respQ8.rating) > 0
      text = CLICK HERE TO CONTINUE
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    CodeComponent leftText2
      Code Type = Auto->JS
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      Begin Routine:
        questions2.alignText='left'
        questions2.alignHoriz = 'left'
  Routine closure3
    TextComponent qsInstr_3
      letterHeight = 0.03
      pos = (0, .32)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 5 (Strongly Agree). If you would prefer not to rate a given statement, select the "prefer not to answer" option on the far left end of the scale.
      wrapWidth = 1.5
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    TextComponent questions3
      letterHeight = 0.03
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        9. I would quickly become impatient and irritated if I would not find a solution to a problem immediately.



        10. I don’t like to be with people who are capable of unexpected actions.



        11. I dislike it when a person’s statement could mean many different things.



        12. I find that establishing a consistent routine enables me to enjoy life more.
    SliderComponent respQ9
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.177)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ10
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.05)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ11
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -0.085)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ12
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -0.22)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent surveyContinue3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (.5,.25)
      startVal [condition] = (respQ9.rating + respQ10.rating + respQ11.rating + respQ12.rating) > 0
      text = CLICK HERE TO CONTINUE
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    CodeComponent leftText3
      Code Type = Auto->JS
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      Begin Routine:
        questions3.alignText='left'
        questions3.alignHoriz = 'left'
  Routine closure4
    TextComponent qsInstr_4
      letterHeight = 0.03
      pos = (0, .32)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 5 (Strongly Agree). If you would prefer not to rate a given statement, select the "prefer not to answer" option on the far left end of the scale.
      wrapWidth = 1.5
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    TextComponent questions4
      letterHeight = 0.03
      pos = (0, 0.087)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        13. I enjoy having a clear and structured mode of life.



        14. I do not usually consult many different opinions before forming my own view.



        15. I dislike unpredictable situations.
    SliderComponent respQ13
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.175)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ14
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, 0.034)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent respQ15
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ('PREFER NOT TO SAY', 1, 2, 3, 4, 5)
      letterHeight = 0.0175
      pos = (0, -0.093)
      size = (1, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent surveyContinue4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (.5,.25)
      startVal [condition] = (respQ13.rating + respQ14.rating + respQ15.rating) > 0
      text = CLICK HERE TO CONTINUE
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    CodeComponent leftText4
      Code Type = Auto->JS
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      Begin Routine:
        questions4.alignText ='left'
        questions4.alignHoriz = 'left'
  Routine consent_rejected
    TextComponent nonconsentMessage
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You did not consent to participate in this study.

        Here is the completion code for this case! Write this down for Prolific:
    TextComponent exitCode
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = C3IXSXSB
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    TextComponent quitButtonText
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 3
      text = Click here to exit
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    MouseComponent exitClick
      clickable = quitButtonText
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3
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    CodeComponent quitButton
      Code Type = Both
      Each Frame:
        if exitClick.isPressedIn(quitButtonText):
            core.quit()
      Each JS Frame:
        if (exitClick.isPressedIn(quitButtonText)) {
            quitPsychoJS('Experiment exited. Have a nice day!', false);
        }
  Routine completion
    TextComponent exitMessage
      letterHeight = 0.035
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Thanks again for participating in the study! Here is your completion code. Make sure to write this down for Prolific:
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    TextComponent doneCode
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = C9XQURHC
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    TextComponent tabExitMessage
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = You can conclude this experiment by pressing the TAB KEY. Please leave the browser window/tab open for 30 seconds before exiting, so that the data will be saved! 
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    KeyboardComponent exitKey
      allowedKeys = 'tab'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine announceConsentForm
Flow
  Routine hello
  Routine consent1
  Routine consent2
  Routine consent3
  LoopInitiator quitLoop loopType="TrialHandler"
    loopType = random
    nReps = nonconsent
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    Routine consent_rejected
  LoopTerminator quitLoop
  Routine instrStart
  LoopInitiator instrLoop loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = fluency_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'steps': 0, 'fams': 1, 'face_file': 'img/B01_00.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 1, 'fams': 1, 'face_file': 'img/B01_01.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 2, 'fams': 1, 'face_file': 'img/B01_02.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 3, 'fams': 1, 'face_file': 'img/B01_03.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 4, 'fams': 1, 'face_file': 'img/B01_04.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 5, 'fams': 1, 'face_file': 'img/B01_05.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 6, 'fams': 1, 'face_file': 'img/B01_06.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 7, 'fams': 1, 'face_file': 'img/B01_07.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 8, 'fams': 1, 'face_file': 'img/B01_08.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'},
      {'steps': 9, 'fams': 1, 'face_file': 'img/B01_09.jpg', 'cond': 'CONTROL', 'instr': 'Press J as soon as you see a face', 'term': ' ', 'key_map': 'JK'}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
    Routine specific_instr
    Routine rateInstr
  LoopTerminator instrLoop
  LoopInitiator attnChecker loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator attnLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 99
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      LoopInitiator reshowInstr loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = failure
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        Routine general_instr2
        Routine specific_instr2
        Routine rateInstr2
      LoopTerminator reshowInstr
      LoopInitiator q1 loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine attnCheck1
      LoopTerminator q1
      LoopInitiator q2 loopType="TrialHandler"
        loopType = random
        nReps = continueQuestions
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        Routine attnCheck2
      LoopTerminator q2
      LoopInitiator q3 loopType="TrialHandler"
        loopType = random
        nReps = continueQuestions
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        Routine attnCheck3
      LoopTerminator q3
      LoopInitiator attnFailure loopType="TrialHandler"
        loopType = random
        nReps = failure
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        Routine attnFailed
      LoopTerminator attnFailure
    LoopTerminator attnLoop
    Routine attnSuccess
    LoopInitiator practiceTrial loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      LoopInitiator practiceRepeat loopType="TrialHandler"
        loopType = sequential
        nReps = 99
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        Routine fixation
        Routine practiceFace
        LoopInitiator practiceFailed loopType="TrialHandler"
          loopType = random
          nReps = redo
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          Routine redo_feedback
        LoopTerminator practiceFailed
      LoopTerminator practiceRepeat
      Routine ratingScale
    LoopTerminator practiceTrial
    Routine introDone
  LoopTerminator attnChecker
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = fluency_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    LoopInitiator repeat_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 99
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      Routine fixation
      Routine faceOnset
      LoopInitiator redo_feedback_loop loopType="TrialHandler"
        loopType = sequential
        nReps = redo
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        Routine redo_feedback
      LoopTerminator redo_feedback_loop
    LoopTerminator repeat_loop
    Routine ratingScale
    Routine cont
  LoopTerminator trials
  Routine intro2Questions
  Routine closure1
  Routine closure2
  Routine closure3
  Routine closure4
  Routine demographics
  Routine openAnswer
  Routine debrief
  Routine completion
